MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_33220a.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: Agilent
InstrumentModel: DSO1004A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand
  Code:
    output 1

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Method Autoscale
    Type: InstrumentCommand
    Line Command=":AUToscale" Output="false"

  Method ForceTrigger
    Type: InstrumentCommand
    Line Command=":FORCetrig" Output="false"

  Method Run
    Type: InstrumentCommand
    Line Command=":RUN" Output="false"

  Method Single
    Type: InstrumentCommand
    Line Command=":SINGLE" Output="false"

  Method Stop
    Type: InstrumentCommand
    Line Command=":STOP" Output="false"

  Method Trig50pct
    Type: InstrumentCommand
    Line Command=":TRIG%50" Output="false"

Group Acquire
  Size: 1
  Mappings ChannelMap Command="Acquire1" Index="1"

  Property AType
    Type: InstrumentCommand
    ConfigureCommand: :ACQuire:TYPE
    QueryCommand: :ACQuire:TYPE?
    PermissibleType: String enum [normal=NORMal, average=AVERage, peak=PEAK]
    DefaultValue: normal
    ReadOnly: never

  Property Average
    Type: InstrumentCommand
    ConfigureCommand: :ACQuire:AVERages
    QueryCommand: :ACQuire:AVERages?
    PermissibleType: Double enum [2.0, 4.0, 8.0, 16.0, 32.0, 64.0, 128.0, 256.0]
    DefaultValue: 2.0
    ReadOnly: never

Group channel1
  Size: 1
  Mappings ChannelMap Command="Channel1" Index="1"

  Property BWlimit
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:BWLimit
    QueryCommand: :CHANnel1:BWLimit?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:COUPling
    QueryCommand: :CHANnel1:COUPling?
    PermissibleType: String enum [AC=AC, DC=DC, GND=GND]
    DefaultValue: AC
    ReadOnly: never

  Property Enable
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:DISPlay
    QueryCommand: :CHANnel1:DISPlay?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Filter
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:FILTer
    QueryCommand: :CHANnel1:FILTer?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Invert
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:INVert
    QueryCommand: :CHANnel1:INVert?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Offset
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:OFFSet
    QueryCommand: :CHANnel1:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Probe
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:PROBe
    QueryCommand: :CHANnel1:PROBe?
    PermissibleType: String enum [0.001X=0.001X, 0.01X=0.01X, 0.1X=0.1X, 1X=1X, 10X=10X, 100X=100X, 1000X=1000X]
    DefaultValue: 0.001X
    ReadOnly: never

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:SCALe
    QueryCommand: :CHANnel1:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Units
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:UNITs
    QueryCommand: :CHANnel1:UNITs?
    PermissibleType: String enum [volts=VOLT, amperes=AMP]
    DefaultValue: volts
    ReadOnly: never

  Property Vernier
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel1:VERNier
    QueryCommand: :CHANnel1:VERNier?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

Group channel2
  Size: 1
  Mappings ChannelMap Command="Channel2" Index="1"

  Property BWlimit
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:BWLimit
    QueryCommand: :CHANnel2:BWLimit?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:COUPling
    QueryCommand: :CHANnel2:COUPling?
    PermissibleType: String enum [AC=AC, DC=DC, GND=GND]
    DefaultValue: AC
    ReadOnly: never

  Property Enable
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:DISPlay
    QueryCommand: :CHANnel2:DISPlay?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Filter
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:FILTer
    QueryCommand: :CHANnel2:FILTer?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Invert
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:INVert
    QueryCommand: :CHANnel2:INVert?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Offset
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:OFFSet
    QueryCommand: :CHANnel2:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Probe
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:PROBe
    QueryCommand: :CHANnel2:PROBe?
    PermissibleType: String enum [0.001X=0.001X, 0.01X=0.01X, 0.1X=0.1X, 1X=1X, 10X=10X, 100X=100X, 1000X=1000X]
    DefaultValue: 0.001X
    ReadOnly: never

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:SCALe
    QueryCommand: :CHANnel2:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Units
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:UNITs
    QueryCommand: :CHANnel2:UNITs?
    PermissibleType: String enum [volts=VOLT, amperes=AMP]
    DefaultValue: volts
    ReadOnly: never

  Property Vernier
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel2:VERNier
    QueryCommand: :CHANnel2:VERNier?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

Group channel3
  Size: 1
  Mappings ChannelMap Command="Channel31" Index="1"

  Property BWlimit
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:BWLimit
    QueryCommand: :CHANnel3:BWLimit?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:COUPling
    QueryCommand: :CHANnel3:COUPling?
    PermissibleType: String enum [AC=AC, DC=DC, GND=GND]
    DefaultValue: AC
    ReadOnly: never

  Property Enable
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:DISPlay
    QueryCommand: :CHANnel3:DISPlay?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Filter
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:FILTer
    QueryCommand: :CHANnel3:FILTer?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Invert
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:INVert
    QueryCommand: :CHANnel3:INVert?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Offset
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:OFFSet
    QueryCommand: :CHANnel3:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Probe
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:PROBe
    QueryCommand: :CHANnel3:PROBe?
    PermissibleType: String enum [0.001x=0.001X, 0.01x=0.01X, 0.1x=0.1X, 1x=1X, 10x=10X, 100x=100X, 1000x=1000X]
    DefaultValue: 0.001x
    ReadOnly: never

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:SCALe
    QueryCommand: :CHANnel3:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Unit
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:UNITs
    QueryCommand: :CHANnel3:UNITs?
    PermissibleType: String enum [volts=VOLT, amperes=AMP]
    DefaultValue: volts
    ReadOnly: never

  Property Vernier
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel3:VERNier
    QueryCommand: :CHANnel3:VERNier?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

Group channel4
  Size: 1
  Mappings ChannelMap Command="Channel41" Index="1"

  Property BWlimit
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:BWLimit
    QueryCommand: :CHANnel4:BWLimit?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:COUPling
    QueryCommand: :CHANnel4:COUPling?
    PermissibleType: String enum [AC=AC, DC=DC, GND=GND]
    DefaultValue: AC
    ReadOnly: never

  Property Enable
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:DISPlay
    QueryCommand: :CHANnel4:DISPlay?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Filter
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:FILTer
    QueryCommand: :CHANnel4:FILTer?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Invert
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:INVert
    QueryCommand: :CHANnel4:INVert?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Offset
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:OFFSet
    QueryCommand: :CHANnel4:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Probe
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:PROBe
    QueryCommand: :CHANnel4:PROBe?
    PermissibleType: String enum [0.001X=0.001X, 0.01X=0.01X, 0.1X=0.1X, 1X=1X, 10X=10X, 100X=100X, 1000X=1000X]
    DefaultValue: 0.001X
    ReadOnly: never

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:SCALe
    QueryCommand: :CHANnel4:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Units
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:UNITs
    QueryCommand: :CHANnel4:UNITs?
    PermissibleType: String enum [volts=VOLT, amperes=AMP]
    DefaultValue: volts
    ReadOnly: never

  Property Vernier
    Type: InstrumentCommand
    ConfigureCommand: :CHANnel4:VERNier
    QueryCommand: :CHANnel4:VERNier?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

Group timebase
  Size: 1
  Mappings ChannelMap Command="Timebase1" Index="1"

  Property delayedOffset
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:DELayed:OFFSet
    QueryCommand: :TIMebase:DELayed:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property delayedScale
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:DELayed:SCALe
    QueryCommand: :TIMebase:DELayed:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property format
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:FORMat?
    QueryCommand: :TIMebase:FORMat
    PermissibleType: String enum [XY=XY, YT=YT, roll=ROLL]
    DefaultValue: XY
    ReadOnly: never

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:MODE
    QueryCommand: :TIMebase:MODE?
    PermissibleType: String enum [MAIN=MAIN, DELAYED=DELayed]
    DefaultValue: MAIN
    ReadOnly: never

  Property offset
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:OFFSet
    QueryCommand: :TIMebase:OFFSet?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property scale
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:SCALe
    QueryCommand: :TIMebase:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group triggeredge
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property Level
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:EDGE:LEVel
    QueryCommand: :TRIGger:EDGE:LEVel?
    PermissibleType: Double bounded [Max="6.0" Min="-6.0"]
    DefaultValue: -6.0
    ReadOnly: never

  Property Slope
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:EDGE:SLOPe
    QueryCommand: :TRIGger:EDGE:SLOPe?
    PermissibleType: String enum [positive=POSitive, negative=NEGative, alternation=ALTernation]
    DefaultValue: positive
    ReadOnly: never

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:EDGE:SOURce
    QueryCommand: :TRIGger:EDGE:SOURce?
    PermissibleType: String enum [channel1=CHANnel1, channel2=CHANnel2, channel3=CHANnel3, channel4=CHANnel4, ext=EXT, ext5=EXT5, acline=ACLine]
    DefaultValue: channel1
    ReadOnly: never

  Property Sweep
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:EDGE:SWEep
    QueryCommand: :TRIGger:EDGE:SWEep?
    PermissibleType: String enum [auto=AUTO, normal=NORMal, single=SINGLe]
    DefaultValue: auto
    ReadOnly: never

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property Data
    Type: InstrumentCommand
    QueryCommand: :WAVeform:DATA?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Format
    Type: InstrumentCommand
    ConfigureCommand: :WAVeform:FORMat
    QueryCommand: :WAVeform:FORMat?
    PermissibleType: String enum [Word=WORD, Byte=BYTE, ASCII=ASCII]
    DefaultValue: Word
    ReadOnly: never

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: :WAVeform:POINTs:MODE
    QueryCommand: :WAVeform:POINTs:MODE?
    PermissibleType: String enum [Normal=NORMal, Max=MAXimum, Raw=RAW]
    DefaultValue: Normal
    ReadOnly: never

  Property Points
    Type: InstrumentCommand
    ConfigureCommand: :WAVeform:POINTs
    QueryCommand: :WAVeform:POINTs?
    PermissibleType: Double bounded DependentProperty=Mode DependentPropertyValue=normal [Max="600.0" Min="1.0"]
    PermissibleType: Double bounded DependentProperty=Mode DependentPropertyValue=raw [Max="20480.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never

  Property Preamble
    Type: InstrumentCommand
    QueryCommand: :WAVeform:PREamble?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: :WAVeform:SOURce
    QueryCommand: :WAVeform:SOURce?
    PermissibleType: String enum [channel1=CHANnel1, channel2=CHANnel2, channel3=CHANnel3, channel4=CHANnel4, math=MATH]
    DefaultValue: channel1
    ReadOnly: never

  Property XIncrement
    Type: InstrumentCommand
    QueryCommand: :WAVeform:XINCrement?
    PermissibleType: Double enum
    DefaultValue: 0
    ReadOnly: never

  Property XOrigin
    Type: InstrumentCommand
    QueryCommand: :WAVeform:XORigin?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property XReference
    Type: InstrumentCommand
    QueryCommand: :WAVeform:XREFerence?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property YIncrement
    Type: InstrumentCommand
    QueryCommand: :WAVeform:YINCrement?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property YOrigin
    Type: InstrumentCommand
    QueryCommand: :WAVeform:YORigin?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property YReference
    Type: InstrumentCommand
    QueryCommand: :WAVeform:YREFerence?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method Data
    Type: InstrumentCommand
    Line Command=":WAVeform:DATA?" Format="int8" Output="true" ReadOutputAs="Binblock"
